# Generated by Configurator on Wed Aug 09 11:26:33 PDT 2017

# Reset
Property,Core,Initialize,0

# Devices
Device,PIXIS,PICAM,PIXIS: 100B eXcelon - 01058913

# Pre-init settings for devices

# Pre-init settings for COM ports

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,PIXIS
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Experiment Setup
# Preset: Basic Setup
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,Binning,1
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,BinningX,1
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,BinningY,1
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,Exposure,1000.0000
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,Gain,2
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,OutputTriggerFirstMissing,0
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,Port,Low Noise
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,ReadoutControl,Full Frame
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,ReadoutRate,2MHz 16bit (Low Noise)
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TransposeCorrection,0
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TransposeMirrorX,0
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TransposeMirrorY,0
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TransposeXY,0
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,Trigger Timeout (secs),2
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TriggerDetermination,Negative Polarity
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,TriggerMode,No Response
ConfigGroup,Experiment Setup,Basic Setup,PIXIS,ShutterCloseDelay,0


# Group: Cleans/Skips
# Preset: Basic Setup
ConfigGroup,Cleans/Skips,Basic Setup,PIXIS,CleanCycleCount,1
ConfigGroup,Cleans/Skips,Basic Setup,PIXIS,CleanHeight,2
ConfigGroup,Cleans/Skips,Basic Setup,PIXIS,CleanHeightCount,5
ConfigGroup,Cleans/Skips,Basic Setup,PIXIS,CleanSerialRegister,1
ConfigGroup,Cleans/Skips,Basic Setup,PIXIS,CleanUntilTrigger,1


# Group: Hardware Setup
# Preset: Basic Setup
ConfigGroup,Hardware Setup,Basic Setup,PIXIS,CCDTemperatureSetPoint,-75.0000
ConfigGroup,Hardware Setup,Basic Setup,PIXIS,OutputSignal,Shutter Open
ConfigGroup,Hardware Setup,Basic Setup,PIXIS,OutputTriggerFirstMissing,0
ConfigGroup,Hardware Setup,Basic Setup,PIXIS,ShutterCloseDelay,0
ConfigGroup,Hardware Setup,Basic Setup,PIXIS,ShutterMode,Normal
ConfigGroup,Hardware Setup,Basic Setup,Core,AutoFocus,
ConfigGroup,Hardware Setup,Basic Setup,Core,AutoShutter,1
ConfigGroup,Hardware Setup,Basic Setup,Core,Camera,PIXIS
ConfigGroup,Hardware Setup,Basic Setup,Core,ChannelGroup,
ConfigGroup,Hardware Setup,Basic Setup,Core,Focus,
ConfigGroup,Hardware Setup,Basic Setup,Core,Galvo,
ConfigGroup,Hardware Setup,Basic Setup,Core,ImageProcessor,
ConfigGroup,Hardware Setup,Basic Setup,Core,Initialize,1
ConfigGroup,Hardware Setup,Basic Setup,Core,SLM,
ConfigGroup,Hardware Setup,Basic Setup,Core,Shutter,
ConfigGroup,Hardware Setup,Basic Setup,Core,TimeoutMs,5000
ConfigGroup,Hardware Setup,Basic Setup,Core,XYStage,



# PixelSize settings

